PsychoPy2experiment version="2023.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  expName = WythoffsHumanExp
  keyboardBackend = ioHub
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Routines
  Routine make_move
    CodeComponent move_code
      Code Type = Auto->JS
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      Begin Routine:
        if npc_start:
            npc_start = False
            continueRoutine = False
      Each Frame:
        for square in squares:
            square.draw()
      End Routine:
        if row_new == col_new == 0:
            player_won = True
            num_wins = num_wins + 1
            turns.finished = True
            continueRoutine = False
    PolygonComponent moving_piece
      fillColor = dodgerblue
      lineColor = dodgerblue
      pos [set every frame] = ((((1-t)*col+t*col_new)-7)/17, (15-((1-t)*row+t*row_new)-8)/17)
      saveStartStop = False
      shape = circle
      size = (1/19, 1/19)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine select_move
    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        if npc_start:
            continueRoutine = False

        row = row_new
        col = col_new
      Each Frame:
        if mouse.getPressed()[0] == 1:
            mouse_x, mouse_y = mouse.getPos()
            row_new = round(0 - ((mouse_y * 17) + 8 - 15))
            col_new = round((mouse_x * 17) + 7)
            if row_new <= row and col_new <= col:
                if row_new >= 0 and col_new >= 0:
                    if row_new==row or col_new==col or row-row_new == col-col_new:
                        continueRoutine = False

        for square in squares:
            square.draw()
    PolygonComponent piece
      fillColor = dodgerblue
      lineColor = dodgerblue
      pos [set every repeat] = ((col-7)/17, (15-row-8)/17)
      saveStartStop = False
      shape = circle
      size = (1/19, 1/19)
      startVal [time (s)] = 0.0
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    MouseComponent mouse
      forceEndRoutineOnPress = never
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent text
      letterHeight = 0.05
      pos = (0, 0.465)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Your turn
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  Routine npc_move
    CodeComponent npc_code
      Code Type = Auto->JS
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      Begin Routine:
        if turns.finished:
            continueRoutine = False
      Each Frame:
        for square in squares:
            square.draw()
      End Routine:
        if row_new == col_new == 0:
            if player_won == None:
                player_won = False
            turns.finished = True
    PolygonComponent moving_npc
      fillColor = chestnut
      lineColor = chestnut
      pos [set every frame] = ((((1-t)*col+t*col_new)-7)/17, (15-((1-t)*row+t*row_new)-8)/17)
      saveStartStop = False
      shape = circle
      size = (1/19, 1/19)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine npc_wait
    CodeComponent wait_code
      Code Type = Auto->JS
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      Begin Routine:
        if turns.finished:
            continueRoutine = False

        row = row_new
        col = col_new

        # select random opponent move
        moves = []

        for r in range (row): # vertical moves
            moves.append((r, col))

        for c in range (col): # horiz moves
            moves.append((row, c))

        for d in range(1, min(row, col) + 1): # diag moves
            moves.append((row - d, col - d))

        import random

        if len(moves) > 0:
            (row_new, col_new) = random.choice(moves)
      Each Frame:
        for square in squares:
            square.draw()
    PolygonComponent npc
      fillColor = chestnut
      lineColor = chestnut
      pos [set every repeat] = ((col-7)/17, (15-row-8)/17)
      saveStartStop = False
      shape = circle
      size = (1/19, 1/19)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.25
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  Routine setup_instruct
    CodeComponent setup_code
      Code Type = Auto->JS
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      Begin Experiment:
        # Make game board tiles for rendering later

        squares = []

        for row in range(15):
            for col in range(15):

                if (row + col) % 2 == 0:
                    color = 'lightgray'
                else:
                    color = 'darkgray'

                x_loc = ((15 - row) - 8) / 17
                y_loc = (col - 7) / 17

                squares.append(
                    visual.Rect(
                        win = win,
                        width = 1/17,
                        height = 1/17,
                        pos = (x_loc, y_loc),
                        fillColor = color))
      Begin Routine:
        import random

        num_games = 10 # must be even
        assert(num_games % 2 == 0)

        # generate shuffled list of who starts each game
        npc_starts = []
        for game in range(int(num_games/2)):
            npc_starts.append(True)
            npc_starts.append(False)
        random.shuffle(npc_starts)

        game = 0 # initialize game counter
        num_wins = 0 #initialize win counter
    TextComponent title_text
      color = gold
      letterHeight = 0.1
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Wythoff's Game Experiment
      wrapWidth = 1.3
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    TextComponent overview_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.2
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      text:
        Welcome! Please read all instructions carefully.

        This experiment will have 3 sections.
        You will be playing a virtual board game.
        Click the button below for the tutorial.
    PolygonComponent start_button
      fillColor = white
      lineColor = silver
      lineWidth = 8
      pos = (0, -0.3)
      saveStartStop = False
      shape = rectangle
      size = (0.2, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent button_label
      color = grey
      letterHeight = 0.05
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = begin!
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    MouseComponent start_mouse
      clickable = start_button
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine countdown
    CodeComponent countdown_code
      Code Type = Auto->JS
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      Begin Routine:
        # board starting spot initialization

        import random
        import math

        player_won = None
        npc_start = npc_starts[game]
        game = game + 1

        row = random.randint(0,14)
        col = random.randint(0,14)

        while row == col == 0:
            row = random.randint(0,14)
            col = random.randint(0,14)

        row_new = row
        col_new = col
      Each Frame:
        for square in squares:
            square.draw()
    TextComponent countdown_text
      letterHeight = 0.05
      pos = (0, 0.465)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every frame] = $(3 - math.floor(t))
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    PolygonComponent blue_piece
      fillColor = dodgerblue
      lineColor = dodgerblue
      opacity [set every repeat] = 1 - npc_start
      pos [set every repeat] = ((col-7)/17, (15-row-8)/17)
      saveStartStop = False
      shape = circle
      size = (1/19, 1/19)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    PolygonComponent red_piece
      fillColor = chestnut
      lineColor = chestnut
      opacity [set every repeat] = npc_start
      pos [set every repeat] = ((col-7)/17, (15-row-8)/17)
      saveStartStop = False
      shape = circle
      size = (1/19, 1/19)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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  Routine end_pause
    CodeComponent end_code
      Code Type = Auto->JS
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      Begin Routine:
        row = row_new
        col = col_new
      Each Frame:
        for square in squares:
            square.draw()
    PolygonComponent end_blue
      fillColor = dodgerblue
      lineColor = dodgerblue
      opacity [set every repeat] = player_won
      pos [set every repeat] = ((col-7)/17, (15-row-8)/17)
      saveStartStop = False
      shape = circle
      size = (1/19, 1/19)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.75
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    PolygonComponent end_red
      fillColor = chestnut
      lineColor = chestnut
      opacity [set every repeat] = 1 - player_won
      pos [set every repeat] = ((col-7)/17, (15-row-8)/17)
      saveStartStop = False
      shape = circle
      size = (1/19, 1/19)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.75
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  Routine feedback
    TextComponent feedback_win
      color = gold
      letterHeight = 0.1
      opacity [set every repeat] = player_won
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = YOU WON!
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    TextComponent feedback_lose
      color = orange
      letterHeight = 0.1
      opacity [set every repeat] = 1 - player_won
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = YOU LOST!
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    TextComponent status_text
      letterHeight = 0.05
      pos = (0, 0.15)
      startVal [time (s)] = 0.0
      text [set every repeat] = $'games played: ' + str(game) + ' of ' + str(num_games) + '\nwin percentage: ' + str(round (num_wins / game * 100)) + '%'
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    PolygonComponent button
      fillColor = white
      lineColor = silver
      lineWidth = 8
      saveStartStop = False
      shape = rectangle
      size = (0.25, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent button_text
      color = gray
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = proceed
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    MouseComponent next_mouse
      clickable = button
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine tutorial
    CodeComponent tutorial_code
      Code Type = Auto->JS
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      Each Frame:
        for square in squares:
            square.draw()
    PolygonComponent board_outline
      fillColor = None
      lineColor = black
      lineWidth = 20
      shape = rectangle
      size = (15/17, -15/17)
      startVal [time (s)] = 0.0
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    PolygonComponent begin_button
      fillColor = white
      lineColor = silver
      lineWidth = 8
      pos = (0.6, -0.3)
      saveStartStop = False
      shape = rectangle
      size = (0.2, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent begin_text
      color = grey
      letterHeight = 0.05
      pos = (0.6, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = ready!
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    MouseComponent tutorial_mouse
      clickable = begin_button
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent tutorial_title
      letterHeight = 0.05
      pos = (0, 0.47)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Tutorial
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    PolygonComponent box_1
      anchor = top-right
      fillColor = black
      lineColor = black
      lineWidth = 20
      pos = (-15/17/2, 15/17/2)
      shape = rectangle
      size = (0.3, 2/17)
      startVal [time (s)] = 0.0
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    TextComponent text_1
      letterHeight = 0.05
      pos = (-0.595, 13/17/2)
      startVal [time (s)] = 0.0
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      text:
        1) This is the
        game board.
    PolygonComponent arrow
      anchor = top-center
      fillColor = black
      lineColor = none
      ori = -45
      pos = (-13.25/17/2, 13.25/17/2)
      shape = arrow
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    PolygonComponent box_2
      fillColor = black
      lineColor = black
      lineWidth = 20
      pos = (-17.5/17/2, 7.5/17/2)
      shape = rectangle
      size = (0.35, 2/17)
      startVal [time (s)] = 0.0
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    TextComponent text_2
      letterHeight = 0.05
      pos = (-17.5/17/2, 7.5/17/2)
      startVal [time (s)] = 0.0
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      text:
        2) The top-left
        spot is the goal.
    PolygonComponent tutorial_piece
      fillColor = dodgerblue
      lineColor = dodgerblue
      pos = ((7-7)/17, (15-4-8)/17)
      saveStartStop = False
      shape = circle
      size = (1/19, 1/19)
      startVal [time (s)] = 0.0
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    PolygonComponent left_arrow
      fillColor = black
      lineColor = none
      ori = -90
      pos = ((5.75-7)/17, (15-4-8)/17)
      shape = arrow
      size = (1/20, 1/20)
      startVal [time (s)] = 0.0
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    PolygonComponent up_arrow
      fillColor = black
      lineColor = none
      pos = ((7-7)/17, (15-2.75-8)/17)
      shape = arrow
      size = (1/20, 1/20)
      startVal [time (s)] = 0.0
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    PolygonComponent up_left_arrow
      fillColor = black
      lineColor = none
      ori = -45
      pos = ((6.05-7)/17, (15-3.05-8)/17)
      shape = arrow
      size = (1/20, 1/20)
      startVal [time (s)] = 0.0
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    PolygonComponent box_3
      fillColor = black
      lineColor = black
      lineWidth = 20
      pos = (8/17/2, 1/17/2)
      shape = rectangle
      size = (6/17, 7/17)
      startVal [time (s)] = 0.0
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    TextComponent text_3
      letterHeight = 0.05
      pos = (8/17/2, 1/17/2)
      startVal [time (s)] = 0.0
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      text:
        3) This is the
        game piece. It
        can move any
        number of spots
        up, left, or up-
        left diagonally.
        Blue: your turn.
        Red: other turn.
Flow
  Routine setup_instruct
  Routine tutorial
  LoopInitiator games loopType="TrialHandler"
    loopType = random
    nReps = num_games
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    Routine countdown
    LoopInitiator turns loopType="TrialHandler"
      loopType = random
      nReps = 13
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      Routine select_move
      Routine make_move
      Routine npc_wait
      Routine npc_move
    LoopTerminator turns
    Routine end_pause
    Routine feedback
  LoopTerminator games
